PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'inputType': "['b', 'k']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = change-your-mind
  keyboardBackend = ioHub
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Routines
  Routine code
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    CodeComponent declarations
      Code Type = Auto->JS
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      Begin Experiment:
        difficultTargetDuration=0.06
        numCorrect=0
        responseKeys=[['b','index finger button'],['y','middle finger button']]
        if expInfo['inputType']=='k':
            responseKeys=[['t','T key'],['l','L key']]

        def generateTargetString(targetLetter, position):
            return position * 'X' + targetLetter + (7 - position) * 'X'

        def getTargetDuration(isDifficult):
            return difficultTargetDuration if isDifficult else 0.15

        def answeredCorrectly(targetLetter, responseKey):
            if targetLetter == 'T' and responseKey == keyForT():
                return True
            elif targetLetter == 'L' and responseKey == keyForL():
                return True
            return False

        def keyForT():
            return responseKeys[0][0]

        def keyForL():
            return responseKeys[1][0]

        def getFeedbackColor(isCorrect, accurateFeedback):
            if isCorrect:
                if accurateFeedback:
                    return "green"
                else:
                    return "red"
            elif accurateFeedback:
                return "red"
            return "green"

        def getFeedbackText(isCorrect, accurateFeedback):
            if isCorrect:
                if accurateFeedback:
                    return "+ correct +"
                else:
                    return "x wrong x"
            elif accurateFeedback:
                return "x wrong x"
            return "+ correct +"
  Routine practice_instr
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    CodeComponent practice_instr_hide_mouse
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    TextboxComponent practice_instr_textbox
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      text = $"Hello!\nThis practice session will introduce you to the task you will complete in the MRI scanner.\n\nPress any button to continue."
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    KeyboardComponent practice_instr_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_first_input
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    TextboxComponent test_inputs_first_textbox
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"First, let's make sure the input keys are working correctly. In this task, you will be using the {responseKeys[0][1]} and {responseKeys[1][1]} to respond to the trials.\n\nPress the {responseKeys[0][1]} now."
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    KeyboardComponent resp_first_key
      allowedKeys = responseKeys[0][0]
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instr_demo
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    TextboxComponent feedback_instr
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 0.5)
      startVal [time (s)] = 5
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      text:
        The computer will then provide you with feedback on your choice. The feedback may not always be 100% accurate.

        Immediately after the feedback the same trial will be presented again, so you will have the chance to change your mind if you wish.
    TextboxComponent textbox
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $"Press the " + responseKeys[0][1] + " button if the letter was T.\n\nPress the " + responseKeys[1][1] + " button if the letter was L."
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    KeyboardComponent end_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent hide_mouse
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine landing_page
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    TextboxComponent upper_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.30)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        This task is comprised of a series of trials. On each trial you will see a fixation followed by a string of letters in the center of the screen.

        Please decide whether the string contains a T or an L.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent t_instructions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.3, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Press " + responseKeys[0][1] + " if the letter was T."
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    TextboxComponent l_instructions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.3, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = $"Press " + responseKeys[1][1] + " if the letter was L."
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    TextboxComponent lower_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.26)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        The computer will then provide you with feedback on your choice. The feedback may not always be 100% accurate.

        Immediately after the feedback the same trial will be presented again, so you will have the chance to change your mind if you wish.

        Press the space bar to continue.
  Routine first_round
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    TextboxComponent fixation_one
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 1
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    TextboxComponent target
      bold = False
      durationEstim = 0.15
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,targetLocation)
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    KeyboardComponent resp_one
      allowedKeys = responseKeys[0][0],responseKeys[1][0]
      correctAns = $responseKeys[0][0] if targetLetter=='T' else responseKeys[1][0]
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $2 + preFeedbackInterval
      storeCorrect = True
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    TextboxComponent target_masked
      bold = False
      durationEstim = 1.85
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = $getTargetDuration(isDifficult) + 0.5
      stopVal [duration (s)] = $2 - getTargetDuration(isDifficult)
      text = XXXXXXXX
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    TextboxComponent pre_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $target_masked.status==FINISHED
      stopVal [duration (s)] = $preFeedbackInterval
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    CodeComponent update_target_duration
      Code Type = Auto->JS
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      End Routine:
        if isDifficult and resp_one.keys is not None:
            wasCorrect = answeredCorrectly(targetLetter, resp_one.keys[0])
            difficultTargetDuration += -0.01 if wasCorrect else 0.01
            if difficultTargetDuration > 0.15:
                difficultTargetDuration = 0.15
            elif difficultTargetDuration < 0.01:
                difficultTargetDuration = 0.01

        if resp_one.keys is not None and answeredCorrectly(targetLetter, resp_one.keys[0]):
            numCorrect += 1
  Routine display_feedback
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    TextboxComponent feedback
      bold = False
      color [set every repeat] = $"yellow" if resp_one.keys is None else getFeedbackColor(answeredCorrectly(targetLetter, resp_one.keys[0]),accurateFeedback)
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (2, 3)
      startVal [condition] = $pre_feedback_delay.status==FINISHED
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $"- no input -" if resp_one.keys is None else getFeedbackText(answeredCorrectly(targetLetter, resp_one.keys[0]),accurateFeedback)
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    TextboxComponent post_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $feedback.status==FINISHED
      stopVal [duration (s)] = $postFeedbackInterval
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  Routine second_round
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    TextboxComponent fixation_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = .18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 2
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    TextboxComponent target_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = .18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,targetLocation)
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    KeyboardComponent resp_two
      allowedKeys = $responseKeys[0][0], responseKeys[1][0]
      correctAns = $responseKeys[0][0] if targetLetter=='T' else responseKeys[1][0]
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    TextboxComponent target_masked_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = $getTargetDuration(isDifficult) + 0.5
      stopVal [duration (s)] = $2 - getTargetDuration(isDifficult)
      text = XXXXXXXX
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    TextboxComponent intertrial_interval
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = $target_masked_two.status==FINISHED
      stopVal [duration (s)] = $intertrialInterval
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    CodeComponent check_for_repeat_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if numCorrect >= 5:
            trials.finished = True
            repeat.finished = True
  Routine test_second_input
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    TextboxComponent test_inputs_second_textbox
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 1
      text [set every repeat] = $"Great!\n\nNow, press the " + responseKeys[1][1] + "."
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    KeyboardComponent resp_second_key
      allowedKeys = responseKeys[1][0]
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine pretrial_instr
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    TextboxComponent pretrial_instr_textbox
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 1
      text [set every repeat] = $"Great!\n\nNow, let's go through an example of the task you'll be doing.\n\nPress any button to advance through the screens."
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    KeyboardComponent resp_pretrial
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine finish_screen
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    TextboxComponent finish_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      text = $"Good job!\nThis concludes the practice session."
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  Routine pretrial_instr2
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    TextboxComponent pretrial_instr_textbox_2
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.17)
      size = (1, 0.5)
      startVal [time (s)] = 1
      text [set every repeat] = $"First, you will be shown the number 1. Then, you will see the letter T or the letter L flash on the screen."
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    KeyboardComponent pretrial_instr2_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent pretrial_instr_img
      image = pretrial_instr_2.png
      pos = (0, 0.20)
      size = (1.3, 0.23)
      startVal [time (s)] = 1
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    TextboxComponent space_to_adv
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (0.6, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      text = (press any button to advance)
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  Routine pretrial_instr3
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    TextboxComponent pretrial_instr_textbox_3
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.17)
      size = (1, 0.5)
      startVal [time (s)] = 1
      text [set every repeat] = After you've seen the letter, press the corresponding button (index finger for T, middle finger for L). You will then be given feedback on whether or not your choice was correct.
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    KeyboardComponent pretrial_instr2_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent pretrial_instr_img_2
      image [set every repeat] = $'pretrial_instr_3_' + expInfo['inputType'] + '.png'
      pos = (0, 0.20)
      size = (1.1,0.38)
      startVal [time (s)] = 1
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    TextboxComponent space_to_adv_2
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (0.6, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      text = (press any button to advance)
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  Routine pretrial_instr4
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    TextboxComponent pretrial_instr_textbox_4
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.17)
      size = (1, 0.5)
      startVal [time (s)] = 1
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      text [set every repeat]:
        Then, you will see the number 2, and the same letter from before will flash on screen. Again, press the button that corresponds to the letter. If you think you answered incorrectly the first time, this is your opportunity to respond differently.
    KeyboardComponent pretrial_instr2_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent pretrial_instr_img_3
      image [set every repeat] = $'pretrial_instr_4_' + expInfo['inputType'] + '.png'
      pos = (0, 0.20)
      size = (1.1,0.21)
      startVal [time (s)] = 1
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    TextboxComponent space_to_adv_3
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (0.6, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      text = (press any button to advance)
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  Routine check_for_repeat
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    CodeComponent check_for_repeat_code
      Code Type = Auto->JS
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      Begin Routine:
        if numCorrect >= 5:
            repeat.finished = True
  Routine slow_example
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    TextboxComponent practice_instr_textbox_2
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 1
      text = $"Now, you'll complete one slow version of the task.\nPress any button to advance."
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    KeyboardComponent pretrial_instr2_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine slow_example2
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    TextboxComponent example_fixation
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 1
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    TextboxComponent example_target
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text [set every repeat] = XXXLXXXX
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    KeyboardComponent example_resp_one
      allowedKeys = responseKeys[1][0]
      correctAns = $responseKeys[0][0] if targetLetter=='T' else responseKeys[1][0]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextboxComponent example_target_masked
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = XXXXXXXX
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  Routine slow_example3
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    TextboxComponent example_pre_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextboxComponent feedback_2
      bold = False
      color [set every repeat] = green
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (2, 3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = + correct +
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    TextboxComponent post_feedback_delay_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2.5
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  Routine pre_set_instr
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    TextboxComponent practice_instr_textbox_3
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 1
      text = $"Great!\nNext, you'll complete a set of easy practice trials. In order to move on, you must answer correctly 5 times.\nPress any button to begin."
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    KeyboardComponent pretrial_instr2_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine slow_example4
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    TextboxComponent example_fixation_2
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 2
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    TextboxComponent example_target_2
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text [set every repeat] = XXXLXXXX
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    KeyboardComponent example_resp_one_2
      allowedKeys = responseKeys[1][0]
      correctAns = $responseKeys[0][0] if targetLetter=='T' else responseKeys[1][0]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextboxComponent example_target_masked_2
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = XXXXXXXX
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Flow
  Routine code
  Routine practice_instr
  Routine test_first_input
  Routine test_second_input
  Routine pretrial_instr
  Routine pretrial_instr2
  Routine pretrial_instr3
  Routine pretrial_instr4
  Routine slow_example
  Routine slow_example2
  Routine slow_example3
  Routine slow_example4
  Routine slow_example3
  Routine pre_set_instr
  LoopInitiator repeat loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 100
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('intertrialInterval', 2.0), ('preFeedbackInterval', 2.4), ('postFeedbackInterval', 2.9), ('accurateFeedback', 1), ('targetLocation', 5)]),
        OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('intertrialInterval', 2.3), ('preFeedbackInterval', 1.3), ('postFeedbackInterval', 1.7), ('accurateFeedback', 1), ('targetLocation', 4)]),
        OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('intertrialInterval', 2.5), ('preFeedbackInterval', 2.1), ('postFeedbackInterval', 1.6), ('accurateFeedback', 1), ('targetLocation', 5)]),
        OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('intertrialInterval', 2.0), ('preFeedbackInterval', 1.8), ('postFeedbackInterval', 2.7), ('accurateFeedback', 1), ('targetLocation', 3)]),
        OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('intertrialInterval', 2.3), ('preFeedbackInterval', 1.1), ('postFeedbackInterval', 1.9), ('accurateFeedback', 1), ('targetLocation', 2)]),
        OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('intertrialInterval', 2.4), ('preFeedbackInterval', 1.5), ('postFeedbackInterval', 1.7), ('accurateFeedback', 1), ('targetLocation', 6)]),
        OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('intertrialInterval', 2.6), ('preFeedbackInterval', 2.4), ('postFeedbackInterval', 2.0), ('accurateFeedback', 1), ('targetLocation', 3)])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
      Routine first_round
      Routine display_feedback
      Routine second_round
    LoopTerminator trials
    Routine check_for_repeat
  LoopTerminator repeat
  Routine finish_screen
